PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = visual_search
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    TextComponent text_instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        แตะหน้าจอเพื่อเริ่มเล่น
    MouseComponent mouse_instructions
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ISI
    RoutineSettingsComponent ISI
      saveStartStop = False
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    TextComponent blank
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine corsi_respond
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    PolygonComponent blk1
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk3
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk4
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk5
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk6
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk7
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk8
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent blk9
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent corsi_mouse
      clickable = blk1, blk2, blk3, blk4, blk5, blk6, blk7, blk8, blk9
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent check_correct
      Code Type = Auto->JS
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      Begin Routine:
        # list to keep track which blocks was clicked
        order_clicked = []

        # attribute to show the Submit button
        show = False
      Each Frame:
        for block in respond_blocks:
            if corsi_mouse.isPressedIn(block):
                # change clicked block to red
                block.fillColor = [1, 0, 0]
                # prevent list from being populated repeatedly with same block while mouse is being held
                if block.name not in order_clicked:
                    order_clicked.append(block.name)

        # show submit button if amount of blocks clicked is the same as sequence number
        if len(corsi_mouse.clicked_name)==nBlocks:
            show = True

        if corsi_mouse.isPressedIn(submit_button):
            continueRoutine = False
      End Routine:
        # create a variable to store accuracy
        correct = 0
        print('order_clicked', order_clicked)
        print('correct_order', correct_order)

        # create a list to store accuracy
        correct_list = []
        count = 0
        for name in order_clicked:
            if name == correct_order[count]:
                correct_list.append(1) # add value of 1 if block clicked matches the correct order
            else:
                correct_list.append(0) # add 0 if no match
            count += 1
        print(correct_list)
        # e.g. list - [1,1,1] for 3 sequences block

        # save list to csv output
        thisExp.addData('correct_list', correct_list)

        # if the sum of list is equals to number of sequence, the trial is correct
        if sum(correct_list) == len(correct_list):
            correct = 1

        # save correct variable to csv output
        thisExp.addData('corsi_correct', correct)

        # increase number of blocks if they get it correct
        if correct:
            nBlocks += 1


        # cap the number of blocks at the max number
        if nBlocks > len(blocks):
            nBlocks = len(blocks)
    TextboxComponent submit_button
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = show
      text = Submit
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  Routine end
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  Routine Welcome
    RoutineSettingsComponent Welcome
      saveStartStop = False
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    TextComponent text_Welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text [set every repeat]:
        $text_tutorial
    MouseComponent mouse_Welcome
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
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    TextComponent text_3
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 3
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    TextComponent text_2
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 2
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    TextComponent text_1
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text = 1
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  Routine instructions_t
    RoutineSettingsComponent instructions_t
      saveStartStop = False
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    MouseComponent mouse_instructions_t
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_t
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        คุณจะเห็นรูปทรงหลายรูปปรากฏบนหน้าจอในแต่ละรอบ
        คุณต้องหา "สามเหลี่ยม" เมื่อเจอให้กดปุ่มสึเขียว
        ถ้าไม่มี "สามเหลี่ยม" ให้กดปุ่มสีแดง
        แตะเพื่อดำเนินการต่อ
  Routine corsi_respond_t
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    PolygonComponent box1_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box2_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box3_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box4_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box5_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box6_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box7_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box8_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent box9_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent corsi_mouse_t
      clickable = box1_2, box2_2, box3_2, box4_2, box5_2, box6_2, box7_2, box8_2, box9_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent check_correct_t
      Code Type = Auto->JS
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      Begin Routine:
        # list to keep track which blocks was clicked
        order_clicked = []

        # attribute to show the Submit button
        show = False
      Each Frame:
        for block in respond_blocks:
            if corsi_mouse_t.isPressedIn(block):
                # change clicked block to red
                block.fillColor = [1, 0, 0]
                # prevent list from being populated repeatedly with same block while mouse is being held
                if block.name not in order_clicked:
                    order_clicked.append(block.name)

        # show submit button if amount of blocks clicked is the same as sequence number
        if len(corsi_mouse_t.clicked_name)==nBlocks:
            show = True

        if corsi_mouse_t.isPressedIn(submit_button):
            continueRoutine = False
      End Routine:
        # create a variable to store accuracy
        correct = 0
        print('order_clicked', order_clicked)
        print('correct_order', correct_order)

        # create a list to store accuracy
        correct_list = []
        count = 0
        for name in order_clicked:
            if name == correct_order[count]:
                correct_list.append(1) # add value of 1 if block clicked matches the correct order
            else:
                correct_list.append(0) # add 0 if no match
            count += 1
        print(correct_list)
        # e.g. list - [1,1,1] for 3 sequences block

        # save list to csv output
        thisExp.addData('correct_list', correct_list)

        # if the sum of list is equals to number of sequence, the trial is correct
        if sum(correct_list) == len(correct_list):
            correct = 1

        # save correct variable to csv output
        thisExp.addData('corsi_correct', correct)

        # increase number of blocks if they get it correct
        if correct:
            nBlocks += 1


        # cap the number of blocks at the max number
        if nBlocks > len(blocks):
            nBlocks = len(blocks)
    TextboxComponent submit_button_t
      bold = False
      editable = False
      fillColor = darkgrey
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [condition] = show
      text = Submit
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  Routine visual_search_1
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    PolygonComponent square_1
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors = decoy # how many distractors on screen
        n_target = tar

        # empty list for distractors
        distractors = []
        targets = []


        xys = [[-0.25, -0.25], [-0.194444, -0.25], [-0.138889, -0.25], [-0.083333, -0.25], [-0.027778, -0.25],
               [0.027778, -0.25], [0.083333, -0.25], [0.138889, -0.25], [0.194444, -0.25], [0.25, -0.25],

               [-0.25, -0.194444], [-0.194444, -0.194444], [-0.138889, -0.194444], [-0.083333, -0.194444], [-0.027778, -0.194444],
               [0.027778, -0.194444], [0.083333, -0.194444], [0.138889, -0.194444], [0.194444, -0.194444], [0.25, -0.194444],

               [-0.25, -0.138889], [-0.194444, -0.138889], [-0.138889, -0.138889], [-0.083333, -0.138889], [-0.027778, -0.138889],
               [0.027778, -0.138889], [0.083333, -0.138889], [0.138889, -0.138889], [0.194444, -0.138889], [0.25, -0.138889],

               [-0.25, -0.083333], [-0.194444, -0.083333], [-0.138889, -0.083333], [-0.083333, -0.083333], [-0.027778, -0.083333],
               [0.027778, -0.083333], [0.083333, -0.083333], [0.138889, -0.083333], [0.194444, -0.083333], [0.25, -0.083333],

               [-0.25, -0.027778], [-0.194444, -0.027778], [-0.138889, -0.027778], [-0.083333, -0.027778], [-0.027778, -0.027778],
               [0.027778, -0.027778], [0.083333, -0.027778], [0.138889, -0.027778], [0.194444, -0.027778], [0.25, -0.027778],

               [-0.25, 0.027778], [-0.194444, 0.027778], [-0.138889, 0.027778], [-0.083333, 0.027778], [-0.027778, 0.027778],
               [0.027778, 0.027778], [0.083333, 0.027778], [0.138889, 0.027778], [0.194444, 0.027778], [0.25, 0.027778],

               [-0.25, 0.083333], [-0.194444, 0.083333], [-0.138889, 0.083333], [-0.083333, 0.083333], [-0.027778, 0.083333],
               [0.027778, 0.083333], [0.083333, 0.083333], [0.138889, 0.083333], [0.194444, 0.083333], [0.25, 0.083333],

               [-0.25, 0.138889], [-0.194444, 0.138889], [-0.138889, 0.138889], [-0.083333, 0.138889], [-0.027778, 0.138889],
               [0.027778, 0.138889], [0.083333, 0.138889], [0.138889, 0.138889], [0.194444, 0.138889], [0.25, 0.138889],

               [-0.25, 0.194444], [-0.194444, 0.194444], [-0.138889, 0.194444], [-0.083333, 0.194444], [-0.027778, 0.194444],
               [0.027778, 0.194444], [0.083333, 0.194444], [0.138889, 0.194444], [0.194444, 0.194444], [0.25, 0.194444],

               [-0.25, 0.25], [-0.194444, 0.25], [-0.138889, 0.25], [-0.083333, 0.25], [-0.027778, 0.25],
               [0.027778, 0.25], [0.083333, 0.25], [0.138889, 0.25], [0.194444, 0.25], [0.25, 0.25]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []


        for i in range(n_distractors):
            # Create a triangle polygon
            distractor = visual.Polygon(win=win, edges=3, size=0.05,
                pos=[xys[count][0], xys[count][1]],
                lineColor='yellow', fillColor='yellow', opacity=1.0, depth=-1.0)
            distractors.append(distractor)
            positions.append(xys[count])
            count += 1

        for i in range(n_target):
            # Create a triangle polygon
            target = visual.Polygon(win=win, edges=3, size=0.05,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[-1.0000, 0.2000, 1.0000], fillColor=[-1.0000, 0.2000, 1.0000], opacity=1.0, depth=-1.0)
            targets.append(target)
            positions.append(xys[count])

        # present the distractors on screen
        for distractor in distractors:
            distractor.setAutoDraw(True)

        for target in targets:
            target.setAutoDraw(True)
      End Routine:
        if mouse_1.clicked_name[-1] == corrAns_1:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor in distractors:
            distractor.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_1
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = มีสามเหลี่ยมสีฟ้า     หรือไม่
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    MouseComponent mouse_1
      clickable = target_1,C_1,InC_1
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_1
      fillColor = -0.3255, 0.4118, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_1
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_1
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_1
      image = Images/1.png
      pos = (0.1, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine visual_search_2
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    PolygonComponent square_2
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors = decoy # how many distractors on screen
        n_target = tar

        # empty list for distractors
        distractors = []
        targets = []


        xys = [[-0.25, -0.25], [-0.194444, -0.25], [-0.138889, -0.25], [-0.083333, -0.25], [-0.027778, -0.25],
               [0.027778, -0.25], [0.083333, -0.25], [0.138889, -0.25], [0.194444, -0.25], [0.25, -0.25],

               [-0.25, -0.194444], [-0.194444, -0.194444], [-0.138889, -0.194444], [-0.083333, -0.194444], [-0.027778, -0.194444],
               [0.027778, -0.194444], [0.083333, -0.194444], [0.138889, -0.194444], [0.194444, -0.194444], [0.25, -0.194444],

               [-0.25, -0.138889], [-0.194444, -0.138889], [-0.138889, -0.138889], [-0.083333, -0.138889], [-0.027778, -0.138889],
               [0.027778, -0.138889], [0.083333, -0.138889], [0.138889, -0.138889], [0.194444, -0.138889], [0.25, -0.138889],

               [-0.25, -0.083333], [-0.194444, -0.083333], [-0.138889, -0.083333], [-0.083333, -0.083333], [-0.027778, -0.083333],
               [0.027778, -0.083333], [0.083333, -0.083333], [0.138889, -0.083333], [0.194444, -0.083333], [0.25, -0.083333],

               [-0.25, -0.027778], [-0.194444, -0.027778], [-0.138889, -0.027778], [-0.083333, -0.027778], [-0.027778, -0.027778],
               [0.027778, -0.027778], [0.083333, -0.027778], [0.138889, -0.027778], [0.194444, -0.027778], [0.25, -0.027778],

               [-0.25, 0.027778], [-0.194444, 0.027778], [-0.138889, 0.027778], [-0.083333, 0.027778], [-0.027778, 0.027778],
               [0.027778, 0.027778], [0.083333, 0.027778], [0.138889, 0.027778], [0.194444, 0.027778], [0.25, 0.027778],

               [-0.25, 0.083333], [-0.194444, 0.083333], [-0.138889, 0.083333], [-0.083333, 0.083333], [-0.027778, 0.083333],
               [0.027778, 0.083333], [0.083333, 0.083333], [0.138889, 0.083333], [0.194444, 0.083333], [0.25, 0.083333],

               [-0.25, 0.138889], [-0.194444, 0.138889], [-0.138889, 0.138889], [-0.083333, 0.138889], [-0.027778, 0.138889],
               [0.027778, 0.138889], [0.083333, 0.138889], [0.138889, 0.138889], [0.194444, 0.138889], [0.25, 0.138889],

               [-0.25, 0.194444], [-0.194444, 0.194444], [-0.138889, 0.194444], [-0.083333, 0.194444], [-0.027778, 0.194444],
               [0.027778, 0.194444], [0.083333, 0.194444], [0.138889, 0.194444], [0.194444, 0.194444], [0.25, 0.194444],

               [-0.25, 0.25], [-0.194444, 0.25], [-0.138889, 0.25], [-0.083333, 0.25], [-0.027778, 0.25],
               [0.027778, 0.25], [0.083333, 0.25], [0.138889, 0.25], [0.194444, 0.25], [0.25, 0.25]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []


        for i in range(n_distractors):
            # Create a triangle polygon
            distractor = visual.Polygon(win=win, edges=4, size=0.05,
                pos=[xys[count][0], xys[count][1]+0.01],
                lineColor='grey', fillColor='grey', opacity=1.0, depth=-1.0, ori=45)
            distractors.append(distractor)
            positions.append(xys[count])
            count += 1

        for i in range(n_target):
            # Create a triangle polygon
            target = visual.Polygon(win=win, edges=3, size=0.05,
                pos=[xys[count][0], xys[count][1]],
                lineColor='grey', fillColor='grey', opacity=1.0, depth=-1.0)
            targets.append(target)
            positions.append(xys[count])

        # present the distractors on screen
        for distractor in distractors:
            distractor.setAutoDraw(True)

        for target in targets:
            target.setAutoDraw(True)
      End Routine:
        if mouse_2.clicked_name[-1] == corrAns_2:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor in distractors:
            distractor.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = มีสามเหลี่ยม     หรือไม่
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    MouseComponent mouse_2
      clickable = target_2,C_2,InC_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_2
      fillColor = grey
      lineColor = grey
      pos = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_2
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_2
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = Images/2.png
      pos = (0.055, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine feedback_2
    RoutineSettingsComponent feedback_2
      saveStartStop = False
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    TextComponent fb_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_2.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_2.thisN) + '/' + str(trials_2.nTotal)
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    CodeComponent track_rt_2
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_2 = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_2.time.slice((- 1))[0]);
        n_round_2 += 1;
        if ((n_round_2 > 1)) {
            trials_2.finished = true;
        }
    TextComponent FB_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine visual_search_3
    RoutineSettingsComponent visual_search_3
      saveStartStop = False
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    PolygonComponent square_3
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors1 = decoy_1 # how many distractors on screen
        n_distractors2 = decoy_2
        n_target = tar

        # empty list for distractors
        distractors1 = []
        distractors2 = []
        targets = []


        xys = [[-0.25, -0.25], [-0.194444, -0.25], [-0.138889, -0.25], [-0.083333, -0.25], [-0.027778, -0.25],
               [0.027778, -0.25], [0.083333, -0.25], [0.138889, -0.25], [0.194444, -0.25], [0.25, -0.25],

               [-0.25, -0.194444], [-0.194444, -0.194444], [-0.138889, -0.194444], [-0.083333, -0.194444], [-0.027778, -0.194444],
               [0.027778, -0.194444], [0.083333, -0.194444], [0.138889, -0.194444], [0.194444, -0.194444], [0.25, -0.194444],

               [-0.25, -0.138889], [-0.194444, -0.138889], [-0.138889, -0.138889], [-0.083333, -0.138889], [-0.027778, -0.138889],
               [0.027778, -0.138889], [0.083333, -0.138889], [0.138889, -0.138889], [0.194444, -0.138889], [0.25, -0.138889],

               [-0.25, -0.083333], [-0.194444, -0.083333], [-0.138889, -0.083333], [-0.083333, -0.083333], [-0.027778, -0.083333],
               [0.027778, -0.083333], [0.083333, -0.083333], [0.138889, -0.083333], [0.194444, -0.083333], [0.25, -0.083333],

               [-0.25, -0.027778], [-0.194444, -0.027778], [-0.138889, -0.027778], [-0.083333, -0.027778], [-0.027778, -0.027778],
               [0.027778, -0.027778], [0.083333, -0.027778], [0.138889, -0.027778], [0.194444, -0.027778], [0.25, -0.027778],

               [-0.25, 0.027778], [-0.194444, 0.027778], [-0.138889, 0.027778], [-0.083333, 0.027778], [-0.027778, 0.027778],
               [0.027778, 0.027778], [0.083333, 0.027778], [0.138889, 0.027778], [0.194444, 0.027778], [0.25, 0.027778],

               [-0.25, 0.083333], [-0.194444, 0.083333], [-0.138889, 0.083333], [-0.083333, 0.083333], [-0.027778, 0.083333],
               [0.027778, 0.083333], [0.083333, 0.083333], [0.138889, 0.083333], [0.194444, 0.083333], [0.25, 0.083333],

               [-0.25, 0.138889], [-0.194444, 0.138889], [-0.138889, 0.138889], [-0.083333, 0.138889], [-0.027778, 0.138889],
               [0.027778, 0.138889], [0.083333, 0.138889], [0.138889, 0.138889], [0.194444, 0.138889], [0.25, 0.138889],

               [-0.25, 0.194444], [-0.194444, 0.194444], [-0.138889, 0.194444], [-0.083333, 0.194444], [-0.027778, 0.194444],
               [0.027778, 0.194444], [0.083333, 0.194444], [0.138889, 0.194444], [0.194444, 0.194444], [0.25, 0.194444],

               [-0.25, 0.25], [-0.194444, 0.25], [-0.138889, 0.25], [-0.083333, 0.25], [-0.027778, 0.25],
               [0.027778, 0.25], [0.083333, 0.25], [0.138889, 0.25], [0.194444, 0.25], [0.25, 0.25]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        count1 = 0
        positions = []


        for i in range(n_distractors1):
            # Create a triangle polygon
            distractor1 = visual.Polygon(win=win, edges=4, size=0.05,
                pos=[xys[count][0], xys[count][1]+0.01],
                lineColor=[-0.4902, 0.7647, 0.6314], fillColor=[-0.4902, 0.7647, 0.6314], opacity=1.0, depth=-1.0, ori=45)
            distractors1.append(distractor1)
            positions.append(xys[count])
            count += 1

        for i in range(n_distractors2):
            # Create a triangle polygon
            distractor2 = visual.Polygon(win=win, edges=1000, size=0.04,
                pos=[xys[count][0], xys[count][1]+0.01],
                lineColor=[1.0000, 0.5059, 0.5922], fillColor=[1.0000, 0.5059, 0.5922], opacity=1.0, depth=-1.0, ori=45)
            distractors2.append(distractor2)
            positions.append(xys[count])
            count += 1

        for i in range(n_target):
            # Create a triangle polygon
            target = visual.Polygon(win=win, edges=1000, size=0.04,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[-0.4902, 0.7647, 0.6314], fillColor=[-0.4902, 0.7647, 0.6314], opacity=1.0, depth=-1.0)
            targets.append(target)
            positions.append(xys[count])


        # present the distractors on screen
        for distractor1 in distractors1:
            distractor1.setAutoDraw(True)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(True)

        for target in targets:
            target.setAutoDraw(True)
      End Routine:
        if mouse_3.clicked_name[-1] == corrAns_3:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor1 in distractors1:
            distractor1.setAutoDraw(False)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = มีวงกลมสีฟ้าอมเขียว      หรือไม่
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    MouseComponent mouse_3
      clickable = target_3,C_3,InC_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_3
      fillColor = -0.4902, 0.7647, 0.6314
      lineColor = 1.0000, 0.5059, 0.5922
      pos = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_3
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_3
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = Images/3.png
      pos = (0.14, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine feedback_3
    RoutineSettingsComponent feedback_3
      saveStartStop = False
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    TextComponent fb_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_3.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_3.thisN) + '/' + str(trials_3.nTotal)
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    CodeComponent track_rt_3
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_3 = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_3.time.slice((- 1))[0]);
        n_round_3 += 1;
        if ((n_round_3 > 1)) {
            trials_3.finished = true;
        }
    TextComponent FB_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine feedback_4
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    TextComponent fb_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_4.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_4.thisN) + '/' + str(trials_4.nTotal)
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    CodeComponent track_rt_4
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_4 = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_4.time.slice((- 1))[0]);
        n_round_4 += 1;
        if ((n_round_4 > 1)) {
            trials_4.finished = true;
        }
    TextComponent FB_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine visual_search_4
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    PolygonComponent square_4
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors1 = decoy_1 # how many distractors on screen
        n_distractors2 = decoy_2
        n_target = tar

        # empty list for distractors
        distractors1 = []
        distractors2 = []
        targets = []


        xys = [[-0.25, -0.25], [-0.194444, -0.25], [-0.138889, -0.25], [-0.083333, -0.25], [-0.027778, -0.25],
               [0.027778, -0.25], [0.083333, -0.25], [0.138889, -0.25], [0.194444, -0.25], [0.25, -0.25],

               [-0.25, -0.194444], [-0.194444, -0.194444], [-0.138889, -0.194444], [-0.083333, -0.194444], [-0.027778, -0.194444],
               [0.027778, -0.194444], [0.083333, -0.194444], [0.138889, -0.194444], [0.194444, -0.194444], [0.25, -0.194444],

               [-0.25, -0.138889], [-0.194444, -0.138889], [-0.138889, -0.138889], [-0.083333, -0.138889], [-0.027778, -0.138889],
               [0.027778, -0.138889], [0.083333, -0.138889], [0.138889, -0.138889], [0.194444, -0.138889], [0.25, -0.138889],

               [-0.25, -0.083333], [-0.194444, -0.083333], [-0.138889, -0.083333], [-0.083333, -0.083333], [-0.027778, -0.083333],
               [0.027778, -0.083333], [0.083333, -0.083333], [0.138889, -0.083333], [0.194444, -0.083333], [0.25, -0.083333],

               [-0.25, -0.027778], [-0.194444, -0.027778], [-0.138889, -0.027778], [-0.083333, -0.027778], [-0.027778, -0.027778],
               [0.027778, -0.027778], [0.083333, -0.027778], [0.138889, -0.027778], [0.194444, -0.027778], [0.25, -0.027778],

               [-0.25, 0.027778], [-0.194444, 0.027778], [-0.138889, 0.027778], [-0.083333, 0.027778], [-0.027778, 0.027778],
               [0.027778, 0.027778], [0.083333, 0.027778], [0.138889, 0.027778], [0.194444, 0.027778], [0.25, 0.027778],

               [-0.25, 0.083333], [-0.194444, 0.083333], [-0.138889, 0.083333], [-0.083333, 0.083333], [-0.027778, 0.083333],
               [0.027778, 0.083333], [0.083333, 0.083333], [0.138889, 0.083333], [0.194444, 0.083333], [0.25, 0.083333],

               [-0.25, 0.138889], [-0.194444, 0.138889], [-0.138889, 0.138889], [-0.083333, 0.138889], [-0.027778, 0.138889],
               [0.027778, 0.138889], [0.083333, 0.138889], [0.138889, 0.138889], [0.194444, 0.138889], [0.25, 0.138889],

               [-0.25, 0.194444], [-0.194444, 0.194444], [-0.138889, 0.194444], [-0.083333, 0.194444], [-0.027778, 0.194444],
               [0.027778, 0.194444], [0.083333, 0.194444], [0.138889, 0.194444], [0.194444, 0.194444], [0.25, 0.194444],

               [-0.25, 0.25], [-0.194444, 0.25], [-0.138889, 0.25], [-0.083333, 0.25], [-0.027778, 0.25],
               [0.027778, 0.25], [0.083333, 0.25], [0.138889, 0.25], [0.194444, 0.25], [0.25, 0.25]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        positions = []


        for i in range(n_distractors1):
            # Create a triangle polygon
            distractor1 = visual.Polygon(win=win, edges=4, size=0.05,
                pos=[xys[count][0], xys[count][1]+0.01],
                lineColor=[-1.0000, 0.2000, 1.0000], fillColor=[-1.0000, 0.2000, 1.0000], opacity=1.0, depth=-1.0)
            distractors1.append(distractor1)
            positions.append(xys[count])
            count += 1

        for i in range(n_distractors2):
            # Create a triangle polygon
            distractor2 = visual.Polygon(win=win, edges=3, size=0.05,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[0.1608, -0.7412, 1.0000], fillColor=[0.1608, -0.7412, 1.0000], opacity=1.0, depth=-1.0)
            distractors2.append(distractor2)
            positions.append(xys[count])
            count += 1

        for i in range(n_target):
            # Create a triangle polygon
            target = visual.Polygon(win=win, edges=3, size=0.05,
                pos=[xys[count][0], xys[count][1]],
                lineColor=[-1.0000, 0.2000, 1.0000], fillColor=[-1.0000, 0.2000, 1.0000], opacity=1.0, depth=-1.0)
            targets.append(target)
            positions.append(xys[count])

        # present the distractors on screen
        for distractor1 in distractors1:
            distractor1.setAutoDraw(True)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(True)

        for target in targets:
            target.setAutoDraw(True)
      End Routine:
        if mouse_4.clicked_name[-1] == corrAns_4:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor1 in distractors1:
            distractor1.setAutoDraw(False)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = มีสามเหลี่ยมสีฟ้า     หรือไม่
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    MouseComponent mouse_4
      clickable = target_4,C_4,InC_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_4
      fillColor = -1.0000, 0.2000, 1.0000
      lineColor = 0.1608, -0.7412, 1.0000
      pos = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_4
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_4
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = Images/1.png
      pos = (0.1, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine visual_search
    RoutineSettingsComponent visual_search
      disabled = True
      saveStartStop = False
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    PolygonComponent square_t
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code_t
      Code Type = Auto->JS
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      Begin Routine:
        n_distractors1 = decoy_1 # how many distractors on screen
        n_distractors2 = decoy_2
        n_target = tar

        # empty list for distractors
        distractors1 = []
        distractors2 = []
        targets = []


        xys = [[-0.25, -0.25], [-0.194444, -0.25], [-0.138889, -0.25], [-0.083333, -0.25], [-0.027778, -0.25],
               [0.027778, -0.25], [0.083333, -0.25], [0.138889, -0.25], [0.194444, -0.25], [0.25, -0.25],

               [-0.25, -0.194444], [-0.194444, -0.194444], [-0.138889, -0.194444], [-0.083333, -0.194444], [-0.027778, -0.194444],
               [0.027778, -0.194444], [0.083333, -0.194444], [0.138889, -0.194444], [0.194444, -0.194444], [0.25, -0.194444],

               [-0.25, -0.138889], [-0.194444, -0.138889], [-0.138889, -0.138889], [-0.083333, -0.138889], [-0.027778, -0.138889],
               [0.027778, -0.138889], [0.083333, -0.138889], [0.138889, -0.138889], [0.194444, -0.138889], [0.25, -0.138889],

               [-0.25, -0.083333], [-0.194444, -0.083333], [-0.138889, -0.083333], [-0.083333, -0.083333], [-0.027778, -0.083333],
               [0.027778, -0.083333], [0.083333, -0.083333], [0.138889, -0.083333], [0.194444, -0.083333], [0.25, -0.083333],

               [-0.25, -0.027778], [-0.194444, -0.027778], [-0.138889, -0.027778], [-0.083333, -0.027778], [-0.027778, -0.027778],
               [0.027778, -0.027778], [0.083333, -0.027778], [0.138889, -0.027778], [0.194444, -0.027778], [0.25, -0.027778],

               [-0.25, 0.027778], [-0.194444, 0.027778], [-0.138889, 0.027778], [-0.083333, 0.027778], [-0.027778, 0.027778],
               [0.027778, 0.027778], [0.083333, 0.027778], [0.138889, 0.027778], [0.194444, 0.027778], [0.25, 0.027778],

               [-0.25, 0.083333], [-0.194444, 0.083333], [-0.138889, 0.083333], [-0.083333, 0.083333], [-0.027778, 0.083333],
               [0.027778, 0.083333], [0.083333, 0.083333], [0.138889, 0.083333], [0.194444, 0.083333], [0.25, 0.083333],

               [-0.25, 0.138889], [-0.194444, 0.138889], [-0.138889, 0.138889], [-0.083333, 0.138889], [-0.027778, 0.138889],
               [0.027778, 0.138889], [0.083333, 0.138889], [0.138889, 0.138889], [0.194444, 0.138889], [0.25, 0.138889],

               [-0.25, 0.194444], [-0.194444, 0.194444], [-0.138889, 0.194444], [-0.083333, 0.194444], [-0.027778, 0.194444],
               [0.027778, 0.194444], [0.083333, 0.194444], [0.138889, 0.194444], [0.194444, 0.194444], [0.25, 0.194444],

               [-0.25, 0.25], [-0.194444, 0.25], [-0.138889, 0.25], [-0.083333, 0.25], [-0.027778, 0.25],
               [0.027778, 0.25], [0.083333, 0.25], [0.138889, 0.25], [0.194444, 0.25], [0.25, 0.25]]

        # randomise the coordinates
        shuffle(xys)
        count = 0 # used to iterate through list
        count1 = 0
        positions = []
        col_y = [1.0, 1.0, 0.0]
        col_b = [-1.0000, 0.2000, 1.0000]
        col_g = [0.5, 0.5, 0.5]
        col_p = [1.0000, 0.5059, 0.5922]
        col_b2 = [-0.4902, 0.7647, 0.6314]
        col_p2 = [0.1608, -0.7412, 1.0000]

        for i in range(n_distractors1):
            # Create a triangle polygon
            distractor1 = visual.Polygon(win=win, edges=angle_1, size=scale_1,
                pos=[xys[count][0], xys[count][1]+0.01],
                lineColor=col_1, fillColor=col_1, opacity=1.0, depth=-1.0, ori=rotate_1)
            distractors1.append(distractor1)
            positions.append(xys[count])
            count += 1

        for i in range(n_distractors2):
            # Create a triangle polygon
            distractor2 = visual.Polygon(win=win, edges=angle_2, size=scale_2,
                pos=[xys[count][0], xys[count][1]+0.01],
                lineColor=col_2, fillColor=col_2, opacity=1.0, depth=-1.0, ori=rotate_2)
            distractors2.append(distractor2)
            positions.append(xys[count])
            count += 1

        for i in range(n_target):
            # Create a triangle polygon
            target = visual.Polygon(win=win, edges=angle_t, size=scale_t,
                pos=[xys[count][0], xys[count][1]],
                lineColor=col_t, fillColor=col_t, opacity=1.0, depth=-1.0, ori=rotate_t)
            targets.append(target)
            positions.append(xys[count])


        # present the distractors on screen
        for distractor1 in distractors1:
            distractor1.setAutoDraw(True)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(True)

        for target in targets:
            target.setAutoDraw(True)
      End Routine:
        if mouse_t.clicked_name[-1] == corrAns_t:
            correct = 1
        else:
            correct = 0

        # undraw the distractors
        for distractor1 in distractors1:
            distractor1.setAutoDraw(False)

        for distractor2 in distractors2:
            distractor2.setAutoDraw(False)

        for target in targets:
            target.setAutoDraw(False)
    TextComponent instruct_t
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_t
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    MouseComponent mouse_t
      clickable = target_1,C_1,InC_1
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    PolygonComponent target_t
      fillColor = -0.3255, 0.4118, 1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (10, 10)
      shape = triangle
      size = (0.039, 0.035)
      startVal [time (s)] = 0.0
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    ImageComponent C_t
      image = Images/Yes.png
      pos = (0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent InC_t
      image = Images/No.png
      pos = (-0.15, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_t1
      image = Images/1.png
      pos = (0.1, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent image_t2
      image = Images/2.png
      pos = (0.055, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    ImageComponent image_t3
      image = Images/3.png
      pos = (0.14, 0.395)
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine feedback_1
    RoutineSettingsComponent feedback_1
      saveStartStop = False
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    TextComponent fb_1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_1.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter_1
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_1.thisN) + '/' + str(trials_1.nTotal)
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    CodeComponent track_rt_1
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_1 = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_1.time.slice((- 1))[0]);
        n_round_1 += 1;
        if ((n_round_1 > 1)) {
            trials_1.finished = true;
        }
    TextComponent FB_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine feedback
    RoutineSettingsComponent feedback
      disabled = True
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    TextComponent fb
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'คุณพบเป้าหมายใน ' + str(int(mouse_t.time[-1]*1000)) + 'ms'
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    TextComponent trial_counter
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials_t.thisN) + '/' + str(trials_t.nTotal)
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    CodeComponent track_rt
      Code Type = JS
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      Begin JS Experiment:
        rts = [];
        n_round_t = 0;
      Begin JS Routine:
        if ((correct === 1)) {
            feedback_text = "ถูกต้อง!";
        } else {
            if ((correct === 0)) {
                feedback_text = "ผิด!";
            }
        }
      End JS Routine:
        rts.push(mouse_t.time.slice((- 1))[0]);
        n_round_t += 1;
        if ((n_round_t > 1)) {
            trials_t.finished = true;
        }
    TextComponent FB
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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Flow
  Routine instructions_t
  Routine countdown
  LoopInitiator trials_t loopType="TrialHandler"
    conditionsFile = conditions_t.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target_col': 'white', 'corrAns_t': 'C_t', 'decoy_1': 3, 'decoy_2': 2, 'tar': 1, 'angle_1': 3, 'angle_2': 3, 'angle_t': 3, 'scale_1': 0.05, 'scale_2': 0.05, 'scale_t': 0.05, 'col_1': 'col_y', 'col_2': 'col_y', 'col_t': 'col_b', 'rotate_1': 0, 'rotate_2': 0, 'rotate_t': 0, 'text_t': 'มีสามเหลี่ยมสีฟ้า     หรือไม่'},
      {'target_col': 'red', 'corrAns_t': 'InC_t', 'decoy_1': 8, 'decoy_2': 7, 'tar': 0, 'angle_1': 3, 'angle_2': 3, 'angle_t': 3, 'scale_1': 0.05, 'scale_2': 0.05, 'scale_t': 0.05, 'col_1': 'col_y', 'col_2': 'col_y', 'col_t': 'col_b', 'rotate_1': 0, 'rotate_2': 0, 'rotate_t': 0, 'text_t': 'มีสามเหลี่ยมสีฟ้า     หรือไม่'},
      {'target_col': 'white', 'corrAns_t': 'C_t', 'decoy_1': 13, 'decoy_2': 12, 'tar': 1, 'angle_1': 4, 'angle_2': 4, 'angle_t': 3, 'scale_1': 0.05, 'scale_2': 0.05, 'scale_t': 0.05, 'col_1': 'col_g', 'col_2': 'col_g', 'col_t': 'col_g', 'rotate_1': 45, 'rotate_2': 45, 'rotate_t': 0, 'text_t': 'มีสามเหลี่ยม     หรือไม่'},
      {'target_col': 'red', 'corrAns_t': 'InC_t', 'decoy_1': 2, 'decoy_2': 3, 'tar': 0, 'angle_1': 4, 'angle_2': 4, 'angle_t': 3, 'scale_1': 0.05, 'scale_2': 0.05, 'scale_t': 0.05, 'col_1': 'col_g', 'col_2': 'col_g', 'col_t': 'col_g', 'rotate_1': 45, 'rotate_2': 45, 'rotate_t': 0, 'text_t': 'มีสามเหลี่ยม     หรือไม่'}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
    Routine visual_search
    Routine feedback
  LoopTerminator trials_t
  Routine instructions
  Routine countdown
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = conditions2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('target_col', 'white'), ('decoy', 5), ('decoy_1', 3), ('decoy_2', 2), ('tar', 1), ('corrAns_t', 'C_t'), ('corrAns_1', 'C_1'), ('corrAns_2', 'C_2'), ('corrAns_3', 'C_3'), ('corrAns_4', 'C_4')]),
      OrderedDict([('target_col', 'white'), ('decoy', 15), ('decoy_1', 7), ('decoy_2', 8), ('tar', 1), ('corrAns_t', 'C_t'), ('corrAns_1', 'C_1'), ('corrAns_2', 'C_2'), ('corrAns_3', 'C_3'), ('corrAns_4', 'C_4')]),
      OrderedDict([('target_col', 'red'), ('decoy', 25), ('decoy_1', 13), ('decoy_2', 12), ('tar', 0), ('corrAns_t', 'InC_t'), ('corrAns_1', 'InC_1'), ('corrAns_2', 'InC_2'), ('corrAns_3', 'InC_3'), ('corrAns_4', 'InC_4')])]
    Routine ISI
    Routine visual_search_1
    Routine feedback_1
  LoopTerminator trials_1
  Routine instructions
  Routine countdown
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('target_col', 'white'), ('decoy', 5), ('decoy_1', 3), ('decoy_2', 2), ('tar', 1), ('corrAns_t', 'C_t'), ('corrAns_1', 'C_1'), ('corrAns_2', 'C_2'), ('corrAns_3', 'C_3'), ('corrAns_4', 'C_4')]),
      OrderedDict([('target_col', 'white'), ('decoy', 15), ('decoy_1', 7), ('decoy_2', 8), ('tar', 1), ('corrAns_t', 'C_t'), ('corrAns_1', 'C_1'), ('corrAns_2', 'C_2'), ('corrAns_3', 'C_3'), ('corrAns_4', 'C_4')]),
      OrderedDict([('target_col', 'red'), ('decoy', 25), ('decoy_1', 13), ('decoy_2', 12), ('tar', 0), ('corrAns_t', 'InC_t'), ('corrAns_1', 'InC_1'), ('corrAns_2', 'InC_2'), ('corrAns_3', 'InC_3'), ('corrAns_4', 'InC_4')])]
    Routine ISI
    Routine visual_search_2
    Routine feedback_2
  LoopTerminator trials_2
  Routine instructions
  Routine countdown
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions2.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine ISI
    Routine visual_search_3
    Routine feedback_3
  LoopTerminator trials_3
  Routine instructions
  Routine countdown
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions2.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine ISI
    Routine visual_search_4
    Routine feedback_4
  LoopTerminator trials_4
  Routine end
